CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>.*)-(?P<Assay>.*)-(?P<Plate>.*)-(?P<Magnification>.*)_(?P<Well>[A-P][0-9]{1,2})_(?P<wavelength>.*).TIF
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_w1")
    Name to assign these images:RawBF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_w2")
    Name to assign these images:RawRFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/timcrombie/Desktop/CP_test3/well_mask/wellmask_98.png
    Name to assign this image:well_mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedRAW
    Image or measurement?:Image
    Select the first image:RawBF
    Multiply the first image by:1
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    Image or measurement?:Image
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
MaskImage:[module_num:6|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
    Select the input image:InvertedRAW
    Name the output image:MaskedRaw
    Use objects or an image as a mask?:Image
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    Select image for mask:well_mask
    Invert the mask?:Yes

MaskImage:[module_num:7|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
    Select the input image:RawRFP
    Name the output image:MaskedRFP
    Use objects or an image as a mask?:Image
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    Select image for mask:well_mask
    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:MaskedRaw
    Name the primary objects to be identified:Welloutline
    Typical diameter of objects, in pixel units (Min,Max):800,2000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:MaskedRaw
    Name the output image:IllumGrey2
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:100
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:MaskedRaw
    Name the output image:CorrGrey2
    Select the illumination function:IllumGrey2
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:CorrGrey2
    Name the primary objects to be identified:WormObjects
    Typical diameter of objects, in pixel units (Min,Max):10,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:WormObjects
    Name the output image:WormBinary
    Select the color format:Binary (black & white)
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
UntangleWorms:[module_num:13|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
    Select the input binary image:WormBinary
    Overlap style:Both
    Name the output overlapping worm objects:dauerMod_OverlappingWorms
    Name the output non-overlapping worm objects:dauerMod_NonOverlappingWorms
    Training set file location:Elsewhere...|/Users/timcrombie/repos/dauer_assay_protocol/CellProfiler/worm_models
    Training set file name:dauerMod.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:Yes
    Outline colormap?:Default
    Name the overlapped outline image:dauerMod_OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:Yes
    Name the non-overlapped outlines image:dauerMod_NonoverlappedWormOutlines
    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:High
    Custom complexity:400

UntangleWorms:[module_num:14|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
    Select the input binary image:WormBinary
    Overlap style:Both
    Name the output overlapping worm objects:nondauerMod_OverlappingWorms
    Name the output non-overlapping worm objects:nondauerMod_NonOverlappingWorms
    Training set file location:Elsewhere...|/Users/timcrombie/repos/dauer_assay_protocol/CellProfiler/worm_models
    Training set file name:nondauerMod.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:Yes
    Outline colormap?:Default
    Name the overlapped outline image:nondauerMod_OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:Yes
    Name the non-overlapped outlines image:nondauerMod_NonoverlappedWormOutlines
    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:High
    Custom complexity:400

StraightenWorms:[module_num:15|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
    Select the input untangled worm objects:dauerMod_NonOverlappingWorms
    Name the output straightened worm objects:dauerMod_StraightenedWorms
    Worm width:20
    Training set file location:Elsewhere...|/Users/timcrombie/repos/dauer_assay_protocol/CellProfiler/worm_models
    Training set file name:dauerMod.xml
    Image count:1
    Measure intensity distribution?:Yes
    Number of transverse segments:1
    Number of longitudinal stripes:3
    Align worms?:Do not align
    Alignment image:None
    Select an input image to straighten:MaskedRFP
    Name the output straightened image:dauerMod_StraightenedImage

StraightenWorms:[module_num:16|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
    Select the input untangled worm objects:nondauerMod_NonOverlappingWorms
    Name the output straightened worm objects:nondauerMod_StraightenedWorms
    Worm width:20
    Training set file location:Elsewhere...|/Users/timcrombie/repos/dauer_assay_protocol/CellProfiler/worm_models
    Training set file name:nondauerMod.xml
    Image count:1
    Measure intensity distribution?:Yes
    Number of transverse segments:1
    Number of longitudinal stripes:3
    Align worms?:Do not align
    Alignment image:None
    Select an input image to straighten:MaskedRFP
    Name the output straightened image:nondauerMod_StraightenedImage

MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:dauerMod_NonOverlappingWorms, nondauerMod_NonOverlappingWorms
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:18|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
    Select images to measure:MaskedRFP
    Select objects to measure:dauerMod_NonOverlappingWorms, nondauerMod_NonOverlappingWorms

RelateObjects:[module_num:19|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
    Parent objects:WormObjects
    Child objects:dauerMod_NonOverlappingWorms
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:20|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
    Parent objects:WormObjects
    Child objects:nondauerMod_NonOverlappingWorms
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RescaleIntensity:[module_num:21|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
    Select the input image:RawBF
    Name the output image:rescaledRawBF
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rescaledRawBF
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#1DE4FA
    Select objects to display:Welloutline
    Select outline color:Green
    Select objects to display:nondauerMod_NonOverlappingWorms
    Select outline color:red
    Select objects to display:dauerMod_NonOverlappingWorms

MaskImage:[module_num:23|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
    Select the input image:MaskedRFP
    Name the output image:dauerMod_WormMaskedRFP
    Use objects or an image as a mask?:Objects
    Select object for mask:dauerMod_NonOverlappingWorms
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    Invert the mask?:No

MaskImage:[module_num:24|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
    Select the input image:MaskedRFP
    Name the output image:nondauerMod_WormMaskedRFP
    Use objects or an image as a mask?:Objects
    Select object for mask:nondauerMod_NonOverlappingWorms
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    Invert the mask?:No

RescaleIntensity:[module_num:25|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
    Select the input image:dauerMod_WormMaskedRFP
    Name the output image:dauerMod_RescaledWormMaskedRFP
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
RescaleIntensity:[module_num:26|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
    Select the input image:nondauerMod_WormMaskedRFP
    Name the output image:nondauerMod_RescaledWormMaskedRFP
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
RescaleIntensity:[module_num:27|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
    Select the input image:dauerMod_StraightenedImage
    Name the output image:dauerMod_RescaledWormMaskedRFPStraightened
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
RescaleIntensity:[module_num:28|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
    Select the input image:nondauerMod_StraightenedImage
    Name the output image:nondauerMod_RescaledWormMaskedRFPStraightened
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:dauerMod_RescaledWormMaskedRFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawRFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_dauerMod_NonOverlappingWorms_RFP_mask
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:nondauerMod_RescaledWormMaskedRFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawRFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nondauerMod_NonOverlappingWorms_RFP_mask
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawBF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:dauerMod_RescaledWormMaskedRFPStraightened
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawBF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_dauerMod_straightened_RFP
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:nondauerMod_RescaledWormMaskedRFPStraightened
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawBF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nondauerMod_straightened_RFP
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:34|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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